CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^W(?P<Well>[0-9]{4})F(?P<FOV>[0-9]{4})T(?P<Time>[0-9]{4})Z00(?P<Zslice>[0-9]{1})C(?P<Channel>[0-9]{1}).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:25
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "1") (metadata does Zslice "1")
    Name to assign these images:BF1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "1") (metadata does Zslice "2")
    Name to assign these images:BF2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "1") (metadata does Zslice "3")
    Name to assign these images:BF3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "1") (metadata does Zslice "4")
    Name to assign these images:BF4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "1") (metadata does Zslice "5")
    Name to assign these images:BF5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2") (metadata does Zslice "1")
    Name to assign these images:Nuc1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2") (metadata does Zslice "2")
    Name to assign these images:Nuc2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2") (metadata does Zslice "3")
    Name to assign these images:Nuc3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2") (metadata does Zslice "4")
    Name to assign these images:Nuc4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2") (metadata does Zslice "5")
    Name to assign these images:Nuc5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "3") (metadata does Zslice "1")
    Name to assign these images:Cyt1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "3") (metadata does Zslice "2")
    Name to assign these images:Cyt2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "3") (metadata does Zslice "3")
    Name to assign these images:Cyt3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "3") (metadata does Zslice "4")
    Name to assign these images:Cyt4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "3") (metadata does Zslice "5")
    Name to assign these images:Cyt5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "4") (metadata does Zslice "1")
    Name to assign these images:PI1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "4") (metadata does Zslice "2")
    Name to assign these images:PI2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "4") (metadata does Zslice "3")
    Name to assign these images:PI3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "4") (metadata does Zslice "4")
    Name to assign these images:PI4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "4") (metadata does Zslice "5")
    Name to assign these images:PI5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "5") (metadata does Zslice "1")
    Name to assign these images:Anx1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "5") (metadata does Zslice "2")
    Name to assign these images:Anx2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "5") (metadata does Zslice "3")
    Name to assign these images:Anx3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "5") (metadata does Zslice "4")
    Name to assign these images:Anx4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "5") (metadata does Zslice "5")
    Name to assign these images:Anx5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Maximum
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NucProjected
    Image or measurement?:Image
    Select the first image:Nuc1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Nuc2
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Nuc3
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Nuc4
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Nuc5
    Multiply the fifth image by:1.0
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
ImageMath:[module_num:6|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
    Operation:Maximum
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CytProjected
    Image or measurement?:Image
    Select the first image:Cyt1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cyt2
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Cyt3
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Cyt4
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Cyt5
    Multiply the fifth image by:1.0
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
ImageMath:[module_num:7|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
    Operation:Maximum
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:PIProjected
    Image or measurement?:Image
    Select the first image:PI1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:PI2
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:PI3
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:PI4
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:PI5
    Multiply the fifth image by:1.0
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
ImageMath:[module_num:8|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
    Operation:Maximum
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:AnexinVProjected
    Image or measurement?:Image
    Select the first image:Anx1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Anx2
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Anx3
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Anx4
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Anx5
    Multiply the fifth image by:1.0
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
ImageMath:[module_num:9|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
    Operation:Maximum
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:BFprojected
    Image or measurement?:Image
    Select the first image:BF1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:BF2
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:BF3
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:BF4
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:BF5
    Multiply the fifth image by:1.0
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:NucProjected
    Name the primary objects to be identified:NucSegmented
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:NucSegmented
    Name the objects to be identified:CytSegmented
    Select the method to identify the secondary objects:Propagation
    Select the input image:CytProjected
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:12|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
    Select the input objects:CytSegmented
    Name the output objects:ExpandedMask
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
MaskObjects:[module_num:13|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enabled:False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
    Select objects to be masked:CytSegmented
    Name the masked objects:MaskedCyt
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ExpandedMask
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

Crop:[module_num:14|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enabled:False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
    Select the input image:BFprojected
    Name the output image:SingelCells_Test
    Select the cropping shape:Objects
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    Remove empty rows and columns?:No
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    Select the objects:MaskedCyt

SaveImages:[module_num:15|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enabled:False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
    Select the type of image to save:Cropping
    Select the image to save:SingelCells_Test
    Select method for constructing file names:Single name
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    Enter single file name:W\g<Well>_F\g<FOV>_T\g<Time>_SingleCells
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|OneDrive - GSK\\Desktop\\ImageSegmentation\\Masks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:First cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveCroppedObjects:[module_num:16|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
    Objects:ExpandedMask
    Directory:Default Output Folder sub-folder|OneDrive - GSK\\Desktop\\ImageSegmentation\\test\\Masks
    Saved file format:16-bit tiff
    Do you want to save cropped images or object masks?:Masks
    Image:BFprojected

OverlayOutlines:[module_num:17|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cyt3
    Name the output image:CytOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:NucSegmented
    Select outline color:Green
    Select objects to display:CytSegmented

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:BFprojected
    Select method for constructing file names:Single name
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    Enter single file name:W\g<Well>_F\g<FOV>_T_Brightfield
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OneDrive - GSK\\Desktop\\ImageSegmentation\\test\\BF
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:19|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enabled:False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
    Select images to measure:AnexinVProjected, BF3, CytProjected, PIProjected
    Select objects to measure:CytSegmented

MeasureObjectSizeShape:[module_num:20|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enabled:False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
    Select object sets to measure:CytSegmented
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensityDistribution:[module_num:21|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enabled:False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
    Select images to measure:AnexinVProjected, CytProjected, PIProjected
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:CytSegmented
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
ExportToSpreadsheet:[module_num:22|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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