CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:1
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Mask")
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    Name to assign these objects:SingleCells
    Select the image type:Objects
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    Single image location:file:///C:/Users/fs541623/OneDrive%20-%20GSK/Desktop/ImageSegmentation/test/BF/W0008_F0001_T_Brightfield.tiff
    Name to assign this image:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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enabled:False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
    Select the input image:SingleCells
    Name the output image:ResizedSingleCells
    Resizing method:Resize by specifying desired final dimensions
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    Width of the final image:50
    Height of the final image:50
    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Manual
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    Additional image count:0

MaskImage:[module_num:6|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enabled:False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
    Select the input image:ResizedIndividualCells
    Name the output image:MaskedCell
    Use objects or an image as a mask?:Objects
    Select object for mask:IdentifyPrimaryObjects
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    Invert the mask?:No

FilterObjects:[module_num:7|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
    Select the objects to filter:SingleCells
    Name the output objects:FilterObjects
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
Crop:[module_num:8|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
    Select the input image:BF
    Name the output image:SingleCells
    Select the cropping shape:Objects
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    Remove empty rows and columns?:Edges
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    Select the objects:FilterObjects

OverlayOutlines:[module_num:9|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:SingleCellMask
    Name the output image:SingleCellOutline
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:IdentifyPrimaryObjects

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:SingleCells
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Cell_
    Number of digits:5
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OneDrive - GSK\\Desktop\\ImageSegmentation\\IndividualCells
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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