CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>[A-H]*) - (?P<Column>[0-9]*)\(fld (?P<Site>[0-9]*) wv (?P<Wavelength>.*) - (?P<Filter>.*)\)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Filter "Green")
    Name to assign these images:green
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does Filter "Orange")
    Name to assign these images:orange
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:green
    Name the output image:Illum_green
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:orange
    Name the output image:Illum_orange
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:green
    Name the output image:Corr_green
    Select the illumination function:Illum_green
    Select how the illumination function is applied:Divide
    Select the input image:orange
    Name the output image:Corr_orange
    Select the illumination function:Illum_orange
    Select how the illumination function is applied:Divide

RescaleIntensity:[module_num:8|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
    Select the input image:Corr_green
    Name the output image:Rescale_green
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.03
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
RescaleIntensity:[module_num:9|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
    Select the input image:Corr_orange
    Name the output image:Rescale_orange
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.04
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
ImageMath:[module_num:10|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:green_plus_orange
    Image or measurement?:Image
    Select the first image:Rescale_green
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Rescale_orange
    Multiply the second image by:1.0
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
EnhanceEdges:[module_num:11|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
    Select the input image:green_plus_orange
    Name the output image:Edged_Image
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
ImageMath:[module_num:12|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:green_plus_orange
    Multiply the first image by:2.0
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    Image or measurement?:Image
    Select the second image:Edged_Image
    Multiply the second image by:0.5
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:ImageAfterMath
    Name the primary objects to be identified:all_bacteria
    Typical diameter of objects, in pixel units (Min,Max):8,20
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectIntensity:[module_num:14|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
    Hidden:2
    Select an image to measure:Corr_green
    Select an image to measure:Corr_orange
    Select objects to measure:all_bacteria

FilterObjects:[module_num:15|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
    Select the objects to filter:all_bacteria
    Name the output objects:orange_bacteria
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_Corr_orange
    Filter using a minimum measurement value?:Yes
    Minimum value:0.01
    Filter using a maximum measurement value?:No
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
GrayToColor:[module_num:16|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
    Select a color scheme:Composite
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    Name the output image:Color_Image
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    Hidden:2
    Image name:Corr_green
    Color:green
    Weight:1.0
    Image name:Corr_orange
    Color:#FF8040
    Weight:1.0

RescaleIntensity:[module_num:17|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
    Select the input image:Color_Image
    Name the output image:Rescale_color
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.02
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
OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Rescale_color
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:green
    Select objects to display:all_bacteria
    Select outline color:red
    Select objects to display:orange_bacteria

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:Overlay
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_orange_bacteria,Image|Count_all_bacteria,Image|Metadata_FileLocation,Image|Metadata_Column,Image|Metadata_Series,Image|Metadata_Frame,Image|Metadata_Well,Image|Metadata_Site,Image|Metadata_Filter,Image|Metadata_Wavelength,Image|Metadata_Row,all_bacteria|Intensity_MassDisplacement_Corr_orange,all_bacteria|Intensity_MassDisplacement_Corr_green,all_bacteria|Intensity_MinIntensity_Corr_orange,all_bacteria|Intensity_MinIntensity_Corr_green,all_bacteria|Intensity_StdIntensity_Corr_orange,all_bacteria|Intensity_StdIntensity_Corr_green,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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