CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:Time_(?P<Time>\d{1,2}hrs_R\d{1})_Well_(?P<Well>\d{2})_Field_(?P<Field>\d{1})_C(?P<Channel>\d{1})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:7
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (extension does ispng) (file does contain "masks") (metadata does Channel "3")
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    Name to assign these objects:CytObjects
    Select the image type:Objects
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    Select the rule criteria:and (extension does ispng) (file does contain "masks") (metadata does Channel "2")
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    Name to assign these objects:NucObjects
    Select the image type:Objects
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    Select the rule criteria:and (metadata does Channel "1")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2")
    Name to assign these images:Nuc
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "3")
    Name to assign these images:Cyt
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "4")
    Name to assign these images:PI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "5")
    Name to assign these images:AnnexinV
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

FilterObjects:[module_num:5|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
    Select the objects to filter:CytObjects
    Name the output objects:FilteredCytObj
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Location_Center_X
    Filter using a minimum measurement value?:Yes
    Minimum value:100
    Filter using a maximum measurement value?:Yes
    Maximum value:2460
    Select the measurement to filter by:Location_Center_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:100
    Filter using a maximum measurement value?:Yes
    Maximum value:2060

FilterObjects:[module_num:6|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
    Select the objects to filter:NucObjects
    Name the output objects:FilteredNucObj
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Location_Center_X
    Filter using a minimum measurement value?:Yes
    Minimum value:100
    Filter using a maximum measurement value?:Yes
    Maximum value:2460
    Select the measurement to filter by:Location_Center_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:100
    Filter using a maximum measurement value?:Yes
    Maximum value:2060

Crop:[module_num:7|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
    Select the input image:AnnexinV
    Name the output image:AnnexinV_Crop
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:100,-100
    Top and bottom rectangle positions:100,-100
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    Remove empty rows and columns?:All
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
Crop:[module_num:8|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
    Select the input image:BF
    Name the output image:BF_Crop
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:100,-100
    Top and bottom rectangle positions:100,-100
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    Remove empty rows and columns?:All
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
Crop:[module_num:9|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
    Select the input image:Cyt
    Name the output image:Cyt_Crop
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:100,-100
    Top and bottom rectangle positions:100,-100
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    Remove empty rows and columns?:All
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
Crop:[module_num:10|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
    Select the input image:Nuc
    Name the output image:Nuc_Crop
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:100,-100
    Top and bottom rectangle positions:100,-100
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    Remove empty rows and columns?:All
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
Crop:[module_num:11|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
    Select the input image:PI
    Name the output image:PI_Crop
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:100,-100
    Top and bottom rectangle positions:100,-100
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    Remove empty rows and columns?:All
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
MeasureGranularity:[module_num:12|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
    Select images to measure:AnnexinV, BF, Cyt, Nuc, PI
    Measure within objects?:Yes
    Select objects to measure:FilteredCytObj, FilteredNucObj
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureImageAreaOccupied:[module_num:13|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
    Measure the area occupied by:Objects
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    Select object sets to measure:FilteredCytObj, FilteredNucObj

MeasureObjectIntensityDistribution:[module_num:14|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
    Select images to measure:AnnexinV_Crop, PI_Crop
    Hidden:2
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:FilteredCytObj
    Object to use as center?:These objects
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    Select objects to measure:FilteredNucObj
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureTexture:[module_num:15|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
    Select images to measure:AnnexinV_Crop, BF_Crop, Cyt_Crop, Nuc_Crop, PI_Crop
    Select objects to measure:FilteredCytObj, FilteredNucObj
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureObjectNeighbors:[module_num:16|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
    Select objects to measure:FilteredCytObj
    Select neighboring objects to measure:FilteredCytObj
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:FilteredNucObj
    Select neighboring objects to measure:FilteredNucObj
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:18|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
    Select object sets to measure:FilteredCytObj, FilteredNucObj
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureColocalization:[module_num:19|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
    Select images to measure:AnnexinV_Crop, Nuc_Crop, PI_Crop
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:FilteredCytObj, FilteredNucObj
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureObjectIntensity:[module_num:20|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
    Select images to measure:AnnexinV_Crop, BF_Crop, Cyt_Crop, Nuc_Crop, PI_Crop
    Select objects to measure:FilteredCytObj, FilteredNucObj

MeasureImageIntensity:[module_num:21|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
    Select images to measure:AnnexinV_Crop, BF_Crop, Cyt_Crop, Nuc_Crop, PI_Crop
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
RelateObjects:[module_num:22|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
    Parent objects:FilteredCytObj
    Child objects:FilteredNucObj
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:CytAndNuc
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
FilterObjects:[module_num:23|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
    Select the objects to filter:FilteredCytObj
    Name the output objects:FilteredDoubleNucCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_FilteredNucObj_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:2
    Filter using a maximum measurement value?:Yes
    Maximum value:2

FilterObjects:[module_num:24|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
    Select the objects to filter:FilteredCytObj
    Name the output objects:FilteredNoNucCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_FilteredNucObj_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0

CalculateMath:[module_num:25|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
    Name the output measurement:NucPerCell
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_FilteredNucObj
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_FilteredCytObj
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:26|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|W:\\scratch\\hdd2\\fs541623\\CellProfilerFeatureExtraction
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Intensity_MeanIntensity_BF_Crop,Image|Intensity_MeanIntensity_AnnexinV_Crop,Image|Intensity_MeanIntensity_PI_Crop,Image|Intensity_MeanIntensity_Nuc_Crop,Image|Intensity_MeanIntensity_Cyt_Crop,Image|Intensity_MADIntensity_AnnexinV_Crop,Image|Intensity_MADIntensity_BF_Crop,Image|Intensity_MADIntensity_Cyt_Crop,Image|Intensity_MADIntensity_PI_Crop,Image|Intensity_MADIntensity_Nuc_Crop,Image|Intensity_UpperQuartileIntensity_BF_Crop,Image|Intensity_UpperQuartileIntensity_Cyt_Crop,Image|Intensity_UpperQuartileIntensity_PI_Crop,Image|Intensity_UpperQuartileIntensity_AnnexinV_Crop,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
OverlayObjects:[module_num:27|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enabled:False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
    Input:BF
    Name the output image:CytNucOverlay
    Objects:FilteredCytObj
    Opacity:0.3
