CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "masks")
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    Name to assign these objects:CytObj
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
FilterObjects:[module_num:5|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
    Select the objects to filter:CytObj
    Name the output objects:FilteredCytObj
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Location_Center_X
    Filter using a minimum measurement value?:Yes
    Minimum value:100
    Filter using a maximum measurement value?:Yes
    Maximum value:2460
    Select the measurement to filter by:Location_Center_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:100
    Filter using a maximum measurement value?:Yes
    Maximum value:2060

SaveCroppedObjects:[module_num:6|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
    Objects:FilteredCytObj
    Directory:Elsewhere...|C:\\Users\\fs541623\\OneDrive - GSK\\Desktop\\ImageSegmentation\\test1
    Saved file format:8-bit tiff
    Do you want to save cropped images or object masks?:Masks
    Image:None

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:FilteredCytObj|Location_Center_X,FilteredCytObj|Location_Center_Y,FilteredCytObj|Location_Center_Z
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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